# Generated by Configurator on Fri Jan 27 10:52:10 EST 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM14,SerialManager,COM14
Device,COM4,SerialManager,COM4
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPath,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,TransmittedLamp,Olympus,TransmittedLamp
Device,ManualFocus,Olympus,ManualFocus
Device,Wheel-A,SutterLambda,Wheel-A
Device,Wheel-C,SutterLambda,Wheel-C
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Cascade,PVCAM,Camera-1
Device,AAAOTF_445,AAAOTF,AAAOTF
Device,AAAOTF_488,AAAOTF,AAAOTF
Device,AAAOTF_514,AAAOTF,AAAOTF
Device,AAAOTF_561,AAAOTF,AAAOTF
Device,multiAAAOTF,AAAOTF,multiAAAOTF

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,128000
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM14,AnswerTimeout,500.0000
Property,COM14,BaudRate,9600
Property,COM14,DelayBetweenCharsMs,0.0000
Property,COM14,Handshaking,Off
Property,COM14,Parity,None
Property,COM14,StopBits,1
Property,COM14,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,Even
Property,COM4,StopBits,2
Property,COM4,Verbose,1
Property,OlympusHub,Port,COM4
Property,Wheel-A,Port,COM6
Property,Wheel-A,Timeout(ms),500
Property,Wheel-C,Port,COM6
Property,Wheel-C,Timeout(ms),500
Property,Shutter-A,Port,COM6
Property,Shutter-B,Port,COM6
Property,AAAOTF_445,Port,COM14
Property,AAAOTF_488,Port,COM14
Property,AAAOTF_514,Port,COM14
Property,AAAOTF_561,Port,COM14
Property,multiAAAOTF,Port,COM14

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Cascade
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,Position-6
Label,Objective,4,Position-5
Label,Objective,3,Position-4
Label,Objective,2,Position-3
Label,Objective,1,Position-2
Label,Objective,0,Position-1
# LightPath
Label,LightPath,1,Side Port
Label,LightPath,0,Eye
# FilterCube
Label,FilterCube,5,Position-6
Label,FilterCube,4,Position-5
Label,FilterCube,3,Position-4
Label,FilterCube,2,Position-3
Label,FilterCube,1,Position-2
Label,FilterCube,0,Position-1
# TransmittedLamp
Label,TransmittedLamp,1,On
Label,TransmittedLamp,0,Off
# Wheel-A
Label,Wheel-A,9,Filter-9
Label,Wheel-A,8,Filter-8
Label,Wheel-A,7,Filter-7
Label,Wheel-A,6,Filter-6
Label,Wheel-A,5,Filter-5
Label,Wheel-A,4,Filter-4
Label,Wheel-A,3,Filter-3
Label,Wheel-A,2,Filter-2
Label,Wheel-A,1,Filter-1
Label,Wheel-A,0,Filter-0
# Wheel-C
Label,Wheel-C,9,Filter-9
Label,Wheel-C,8,Filter-8
Label,Wheel-C,7,Filter-7
Label,Wheel-C,6,Filter-6
Label,Wheel-C,5,Filter-5
Label,Wheel-C,4,Filter-4
Label,Wheel-C,3,Filter-3
Label,Wheel-C,2,Filter-2
Label,Wheel-C,1,Filter-1
Label,Wheel-C,0,Filter-0

# Configuration presets
# Group: Photoactivation
# Preset: Activation
ConfigGroup,Photoactivation,Activation,AAAOTF_445,Power (% of max),100.0000
ConfigGroup,Photoactivation,Activation,AAAOTF_488,Power (% of max),100.0000
ConfigGroup,Photoactivation,Activation,AAAOTF_514,Power (% of max),100.0000
ConfigGroup,Photoactivation,Activation,AAAOTF_561,Power (% of max),100.0000
ConfigGroup,Photoactivation,Activation,multiAAAOTF,Channels (8 bit word 1..255),1
ConfigGroup,Photoactivation,Activation,multiAAAOTF,Delay between channels (ms),0.0000
ConfigGroup,Photoactivation,Activation,multiAAAOTF,State,1
ConfigGroup,Photoactivation,Activation,Core,AutoShutter,1
ConfigGroup,Photoactivation,Activation,Core,Shutter,multiAAAOTF

# Preset: Off
ConfigGroup,Photoactivation,Off,AAAOTF_445,Power (% of max),100.0000
ConfigGroup,Photoactivation,Off,AAAOTF_488,Power (% of max),100.0000
ConfigGroup,Photoactivation,Off,AAAOTF_514,Power (% of max),100.0000
ConfigGroup,Photoactivation,Off,AAAOTF_561,Power (% of max),100.0000
ConfigGroup,Photoactivation,Off,multiAAAOTF,Channels (8 bit word 1..255),32
ConfigGroup,Photoactivation,Off,multiAAAOTF,Delay between channels (ms),0.0000
ConfigGroup,Photoactivation,Off,multiAAAOTF,State,0
ConfigGroup,Photoactivation,Off,Core,AutoShutter,1
ConfigGroup,Photoactivation,Off,Core,Shutter,multiAAAOTF

# Preset: Cell
ConfigGroup,Photoactivation,Cell,AAAOTF_445,Power (% of max),100.0000
ConfigGroup,Photoactivation,Cell,AAAOTF_488,Power (% of max),100.0000
ConfigGroup,Photoactivation,Cell,AAAOTF_514,Power (% of max),100.0000
ConfigGroup,Photoactivation,Cell,AAAOTF_561,Power (% of max),100.0000
ConfigGroup,Photoactivation,Cell,multiAAAOTF,Channels (8 bit word 1..255),4
ConfigGroup,Photoactivation,Cell,multiAAAOTF,Delay between channels (ms),0.0000
ConfigGroup,Photoactivation,Cell,multiAAAOTF,State,1
ConfigGroup,Photoactivation,Cell,Core,AutoShutter,1
ConfigGroup,Photoactivation,Cell,Core,Shutter,multiAAAOTF

# Preset: Beads
ConfigGroup,Photoactivation,Beads,AAAOTF_445,Power (% of max),100.0000
ConfigGroup,Photoactivation,Beads,AAAOTF_488,Power (% of max),100.0000
ConfigGroup,Photoactivation,Beads,AAAOTF_514,Power (% of max),100.0000
ConfigGroup,Photoactivation,Beads,AAAOTF_561,Power (% of max),100.0000
ConfigGroup,Photoactivation,Beads,multiAAAOTF,Channels (8 bit word 1..255),8
ConfigGroup,Photoactivation,Beads,multiAAAOTF,Delay between channels (ms),0.0000
ConfigGroup,Photoactivation,Beads,multiAAAOTF,State,1
ConfigGroup,Photoactivation,Beads,Core,AutoShutter,1
ConfigGroup,Photoactivation,Beads,Core,Shutter,multiAAAOTF


# Group: YFP_BF
# Preset: YFP_Excitation
ConfigGroup,YFP_BF,YFP_Excitation,OlympusHub,Control,Manual + Computer
ConfigGroup,YFP_BF,YFP_Excitation,TransmittedLamp,Voltage,2.9000
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-A,Label,Filter-3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-A,State,3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-C,Label,Filter-3
ConfigGroup,YFP_BF,YFP_Excitation,Wheel-C,State,3
ConfigGroup,YFP_BF,YFP_Excitation,Core,Shutter,Shutter-A
ConfigGroup,YFP_BF,YFP_Excitation,FilterCube,Label,Position-3
ConfigGroup,YFP_BF,YFP_Excitation,FilterCube,State,2

# Preset: BF_transmitted
ConfigGroup,YFP_BF,BF_transmitted,OlympusHub,Control,Manual + Computer
ConfigGroup,YFP_BF,BF_transmitted,TransmittedLamp,Voltage,2.7000
ConfigGroup,YFP_BF,BF_transmitted,Wheel-A,Label,Filter-5
ConfigGroup,YFP_BF,BF_transmitted,Wheel-A,State,5
ConfigGroup,YFP_BF,BF_transmitted,Wheel-C,Label,Filter-3
ConfigGroup,YFP_BF,BF_transmitted,Wheel-C,State,3
ConfigGroup,YFP_BF,BF_transmitted,Core,Shutter,Shutter-B
ConfigGroup,YFP_BF,BF_transmitted,FilterCube,Label,Position-3
ConfigGroup,YFP_BF,BF_transmitted,FilterCube,State,2


# Group: Brightfield_CFP
# Preset: Shutter-B
ConfigGroup,Brightfield_CFP,Shutter-B,Core,Shutter,Shutter-B

# Preset: Shutter-A
ConfigGroup,Brightfield_CFP,Shutter-A,Core,Shutter,Shutter-A


# Group: GFP_RFP_BF
# Preset: RFP_60x
ConfigGroup,GFP_RFP_BF,RFP_60x,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,RFP_60x,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,RFP_60x,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,RFP_60x,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF,RFP_60x,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-A,Label,Filter-6
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-A,State,6
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-C,Label,Filter-7
ConfigGroup,GFP_RFP_BF,RFP_60x,Wheel-C,State,7
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,MultiplierGain,3900
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,Offset,274
ConfigGroup,GFP_RFP_BF,RFP_60x,Core,Shutter,Shutter-A
ConfigGroup,GFP_RFP_BF,RFP_60x,Cascade,ReadoutRate,5MHz 16bit

# Preset: Dark Red 700 em
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Wheel-A,Label,Filter-6
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Wheel-A,State,6
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Wheel-C,Label,Filter-8
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Wheel-C,State,8
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Cascade,MultiplierGain,3900
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Cascade,Offset,274
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,GFP_RFP_BF,Dark Red 700 em,Core,Shutter,Shutter-A

# Preset: BF
ConfigGroup,GFP_RFP_BF,BF,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF,BF,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF,BF,FilterCube,State,3
ConfigGroup,GFP_RFP_BF,BF,TransmittedLamp,Voltage,4.1000
ConfigGroup,GFP_RFP_BF,BF,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF,BF,Wheel-A,Label,Filter-4
ConfigGroup,GFP_RFP_BF,BF,Wheel-A,State,4
ConfigGroup,GFP_RFP_BF,BF,Wheel-C,Label,Filter-0
ConfigGroup,GFP_RFP_BF,BF,Wheel-C,State,0
ConfigGroup,GFP_RFP_BF,BF,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF,BF,Cascade,MultiplierGain,1
ConfigGroup,GFP_RFP_BF,BF,Cascade,Offset,275
ConfigGroup,GFP_RFP_BF,BF,Core,Shutter,Shutter-B
ConfigGroup,GFP_RFP_BF,BF,Cascade,ReadoutRate,5MHz 16bit

# Preset:  GFP
ConfigGroup,GFP_RFP_BF, GFP,OlympusHub,Control,Manual + Computer
ConfigGroup,GFP_RFP_BF, GFP,FilterCube,Label,Position-4
ConfigGroup,GFP_RFP_BF, GFP,FilterCube,State,3
ConfigGroup,GFP_RFP_BF, GFP,TransmittedLamp,Voltage,4.3000
ConfigGroup,GFP_RFP_BF, GFP,ManualFocus,FarLimit,20.0000
ConfigGroup,GFP_RFP_BF, GFP,Wheel-A,Label,Filter-4
ConfigGroup,GFP_RFP_BF, GFP,Wheel-A,State,4
ConfigGroup,GFP_RFP_BF, GFP,Wheel-C,Label,Filter-5
ConfigGroup,GFP_RFP_BF, GFP,Wheel-C,State,5
ConfigGroup,GFP_RFP_BF, GFP,Cascade,ClearMode,Pre-Sequence
ConfigGroup,GFP_RFP_BF, GFP,Cascade,MultiplierGain,3824
ConfigGroup,GFP_RFP_BF, GFP,Cascade,Offset,261
ConfigGroup,GFP_RFP_BF, GFP,Core,Shutter,Shutter-A
ConfigGroup,GFP_RFP_BF, GFP,Cascade,ReadoutRate,5MHz 16bit


# Group: CFP_YFP_BF
# Preset: YFPx YFPm 
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Label,Filter-5
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-A,State,5
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Label,Filter-5
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Wheel-C,State,5
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,YFPx YFPm ,Cascade,ReadoutRate,5MHz 16bit

# Preset: BF
ConfigGroup,CFP_YFP_BF,BF,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,BF,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,BF,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,BF,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,BF,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Label,Filter-0
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,BF,Wheel-C,State,0
ConfigGroup,CFP_YFP_BF,BF,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,BF,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,BF,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,BF,Cascade,MultiplierGain,1
ConfigGroup,CFP_YFP_BF,BF,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,BF,Core,Shutter,Shutter-B
ConfigGroup,CFP_YFP_BF,BF,Cascade,ReadoutRate,5MHz 16bit

# Preset: CFPx YFPm
ConfigGroup,CFP_YFP_BF,CFPx YFPm,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,CFPx YFPm,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,CFPx YFPm,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Label,Filter-3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Wheel-C,State,3
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,CFPx YFPm,Cascade,ReadoutRate,5MHz 16bit

# Preset: CFPx CFPm
ConfigGroup,CFP_YFP_BF,CFPx CFPm,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,CFPx CFPm,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,CFPx CFPm,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,CFPx CFPm,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Label,Filter-8
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-A,State,8
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Label,Filter-5
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Wheel-C,State,5
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Core,Shutter,Shutter-A
ConfigGroup,CFP_YFP_BF,CFPx CFPm,Cascade,ReadoutRate,5MHz 16bit

# Preset: mChrerry X594 632M
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-A,Label,Filter-6
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-A,State,6
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-C,Label,Filter-7
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Wheel-C,State,7
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,CFP_YFP_BF,mChrerry X594 632M,Core,Shutter,Shutter-A

# Preset: 594x_700m DarkRed
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,OlympusHub,Control,Manual + Computer
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,FilterCube,Label,Position-3
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,FilterCube,State,2
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,ManualFocus,FarLimit,0.0100
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,ManualFocus,FocusSensitivity,100
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,ManualFocus,FocusWheel,Off
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,ManualFocus,NearLimit,30000.0000
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-A,Busy,0
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-A,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-A,Label,Filter-6
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-A,Speed,3
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-A,State,6
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-C,Busy,0
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-C,Delay_ms,0.0000
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-C,Label,Filter-8
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-C,Speed,3
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Wheel-C,State,8
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Shutter-A,Mode,Fast
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Cascade,ClearMode,Pre-Sequence
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Cascade,Exposure,10.0000
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Cascade,MultiplierGain,3900
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Cascade,Port,Multiplication Gain
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Cascade,ReadoutRate,5MHz 16bit
ConfigGroup,CFP_YFP_BF,594x_700m DarkRed,Core,Shutter,Shutter-A


# Group: Brightfield_epi_CFPYFP
# Preset: CFP
ConfigGroup,Brightfield_epi_CFPYFP,CFP,OlympusHub,Control,Manual + Computer
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-A,Label,Filter-8
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-A,State,8
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-C,Label,Filter-1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Wheel-C,State,1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Shutter-A,State,1
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Shutter-B,State,0
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Cascade,Exposure,200.0000
ConfigGroup,Brightfield_epi_CFPYFP,CFP,Cascade,MultiplierGain,3900

# Preset: Brightfield
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,OlympusHub,Control,Manual + Computer
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-A,Label,Filter-8
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-A,State,8
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-C,Label,Filter-1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Wheel-C,State,1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Shutter-A,State,0
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Shutter-B,State,1
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Cascade,Exposure,200.0000
ConfigGroup,Brightfield_epi_CFPYFP,Brightfield,Cascade,MultiplierGain,3900



# PixelSize settings

